PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word priming task
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.05
      text [set every repeat] = $prime
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2
      text [set every repeat] = $stimuli
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    KeyboardComponent key_resp
      allowedKeys = 'a', 'l', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        press A for words

        press L for non-words

        press SPACE to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 1.05
      stopVal [duration (s)] = 0.95
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  Routine End
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks you for participating.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixations
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SOLO PROJECT FINAL FILES.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'firework', 'prime': 'fire'},
      {'stimuli': 'watermelon', 'prime': 'water'},
      {'stimuli': 'goldshark', 'prime': 'gold'},
      {'stimuli': 'babycar', 'prime': 'baby'},
      {'stimuli': 'textbook', 'prime': 'text'},
      {'stimuli': 'networks', 'prime': 'net'},
      {'stimuli': 'earphones', 'prime': 'ears'}]
    Routine fixations
    Routine trial
  LoopTerminator trials
  Routine End
